PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {u'gender': u'', u'age': u'', u'handedness': u'', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = ColourTesting
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions2
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the 2-back test. You will have to press space if you decide the  coloured square two trials ago was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions3
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the 3-back test. You will have to press space if you decide the  coloured square three trials ago was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent Fix
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = +
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  Routine Welcome
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello and welcome to the cognitive task. This is an n-back memory task
        You will be asked to pay attention to a sequence of coloured squares
        and decide whether you saw the same square n times ago.
        There 3 blocks with 3 different rules.  We will inform you about the new rule.
        Press space to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = It's now time for a short break. When you are ready to continue please press space. 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent polygon
      fillColor [set every repeat] = $colourtest
      lineColor [set every repeat] = $colourtest
      lineWidth [set every repeat] = 1
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (0.20,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      store = all keys
      storeCorrect = True
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participanting in the experiment.
        The experimenter will be with you shortly.
  Routine Instructions
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the 1-back test. You will have to press space if you decide the previous coloured square was the same as the current one.

        Please press space only when you decide the coloured square was repeated. Press space to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator Block1_1back loopType="TrialHandler"
    conditionsFile = ColourTest1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': ['space'], 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Cyan'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block1_1back
  Routine Break
  Routine Instructions2
  LoopInitiator Block2_2back loopType="TrialHandler"
    conditionsFile = ColourTest2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Yellow'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block2_2back
  Routine Break
  Routine Instructions3
  LoopInitiator Block3_3back loopType="TrialHandler"
    conditionsFile = ColourTest3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': ['space'], 'colourtest': 'Red'},
      {'corresp': ['space'], 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': ['space'], 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Yellow'},
      {'corresp': None, 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Magenta'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'White'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Red'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': ['space'], 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': None, 'colourtest': 'Cyan'},
      {'corresp': None, 'colourtest': 'Blue'},
      {'corresp': None, 'colourtest': 'Green'},
      {'corresp': ['space'], 'colourtest': 'Cyan'}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
    Routine Fixation
    Routine trial
  LoopTerminator Block3_3back
  Routine Thanks
